PsychoPy2experiment version="1.71.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine trial
    CodeComponent sendMarker
      Begin Experiment:
        import serial
        device = '/dev/ttyUSB0'
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[{"dev":"eye","cmd":"mark","val":"Cal('+position+')"}]\n')
            ser.close()
        except:
            pass
        print "%s" % (position)
    TextComponent fixation
      color = green
      text = +
      stopVal [duration (s)] = 3
      pos [set every repeat] = $position
      startVal [time (s)] = 0
      letterHeight = 0.15
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      text = Keep your eyes fixated on the green spot.
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = eyepos.csv
    loopType = random
    nReps = 2
    endPoints = [1, 2]
    conditions:
      [{'position': [0.5, 0.5]},
      {'position': [-0.5, -0.5]},
      {'position': [0.5, -0.5]},
      {'position': [-0.5, 0.5]},
      {'position': [0, 0.5]},
      {'position': [0.5, 0]},
      {'position': [-0.5, 0]},
      {'position': [0, -0.5]},
      {'position': [0, 0]}]
    Routine trial
  LoopTerminator trials
  Routine thanks
