PsychoPy2experiment version="1.71.00"
Settings
  Save csv file = True
  Monitor = CNI_LCD
  color = $[.2,.2,.2]
  Window size (pixels) = [1280, 800]
  Full-screen window = False
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  Units = norm
  Screen = 2
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Routines
  Routine start_tracking
    CodeComponent code_2
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"dev":"eye","cmd":"stop"}]\n')
            time.sleep(0.1)
            ser.write('[s,{"dev":"eye","cmd":"start","dur":2400,"file":"litAttn"}]\n')
            ser.close()
            time.sleep(0.2)
        except:
            pass
  Routine init
    CodeComponent init_code
      Begin Experiment:
        import serial
        import datetime
        import time
        device = '/dev/ttyACM1'
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"dev":"eye","cmd":"stop"}]\n')
            ser.close()
            time.sleep(0.2)
        except:
            pass

        mainClock=core.Clock()
  Routine trial
    CodeComponent eyeMarker
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"dev":"eye","cmd":"mark","val":"start'+str(currentLoop.thisIndex)+'"}]\n')
            ser.close()
        except:
            pass
      End Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"dev":"eye","cmd":"mark","val":"end'+str(currentLoop.thisIndex)+'"}]\n')
            ser.close()
        except:
            pass
        time.sleep(0.1)
    TextComponent paragraphs
      color = black
      text [set every repeat] = $text
      units = pix
      startVal [time (s)] = 8
      letterHeight = 23
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    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = ["1", "n"]
      startVal [time (s)] = 1
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    CodeComponent code
      Each Frame:
        if (t >= 5):
            visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor=itemColor, vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
        if (t < 5):
            visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='gray', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      Begin Routine:
        print 'begin text ('+str(mainClock.getTime())+')'
      End Routine:
        print "key=%s, rt=%f" % (resp.keys,resp.rt)
        print 'end text ('+str(mainClock.getTime())+')'
  Routine thanks
    CodeComponent code_3
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"dev":"eye","cmd":"stop"}]\n')
            ser.close()
        except:
            pass
    TextComponent thanksText
      color = black
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
  Routine instruct_green
    TextComponent instrText_2
      color = black
      units = pix
      startVal [time (s)] = 0
      letterHeight = 23
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      text:
        The following text will be surrounded by a GREEN border. So just read as you normally would. Imagine you just picked up this book off the bookshelf and are reading in your favorite place. None of this material will be tested.

        Press the button with your thumb when you're done with a paragraph. The experiment will start momentarily.
    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Each Frame:
        visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='green', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      End Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[t]\n[t]\n')
            ser.close()
        except:
            pass
  Routine instruct_red
    TextComponent instrText_3
      color = black
      units = pix
      startVal [time (s)] = 0
      letterHeight = 23
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      text:
        The following text will be surrounded by a RED border.

        So please read the novel with heightened attention and do a close reading for literary analysis. You'll be tested on this material when you leave the scanner and asked to write a short literary essay.

        Pay attention to how the story's structure is constructed, or crafted, noticing literary details such as setting, narration, tone, and characterization.

        Focus on literary themes and patterns, word choice, syntax, and the order in which sentences and ideas unfold.

        Press the button with your thumb when you're done with a paragraph. The experiment will start momentarily.
    KeyboardComponent ready_3
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_6
      Each Frame:
        visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='red', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      End Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[t]\n[t]\n')
            ser.close()
        except:
            pass
Flow
  Routine init
  Routine instruct_green
  Routine start_tracking
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = textA.csv
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
    conditions:
      [{'text': u'Sir Walter Elliot, of Kellynch Hall, in Somersetshire, was a man who, for his own amusement, never took up any book but the Baronetage; there he found occupation for an idle hour, and consolation in a distressed one; there his faculties were roused into admiration and respect, by contemplating the limited remnant of the earliest patents; there any unwelcome sensations, arising from domestic affairs changed naturally into pity and contempt as he turned over the almost endless creations of the last century; and there, if every other leaf were powerless, he could read his own history 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,
      {'text': u'This was the page at which the favourite volume always opened:\n\nELLIOT OF KELLYNCH HALL.\n\nWalter Elliot, born March 1, 1760, married, July 15, 1784, Elizabeth, daughter of James Stevenson, Esq. of South Park, in the county of Gloucester, by which lady (who died 1800) he has issue Elizabeth, born June 1, 1785; Anne, born August 9, 1787; a still-born son, November 5, 1789; Mary, born November 20, 1791.', 'itemColor': u'green'},
      {'text': u"Precisely such had the paragraph originally stood from the printer's hands; but Sir Walter had improved it by adding, for the information of himself and his family, these words, after the date of Mary's birth--'Married, December 16, 1810, Charles, son and heir of Charles Musgrove, Esq. of Uppercross, in the county of Somerset,' and by inserting most accurately the day of the month on which he had lost his wife.", 'itemColor': u'green'},
      {'text': u"Then followed the history and rise of the ancient and respectable family, in the usual terms; how it had been first settled in Cheshire; how mentioned in Dugdale, serving the office of high sheriff, representing a borough in three successive parliaments, exertions of loyalty, and dignity of baronet, in the first year of Charles II, with all the Marys and Elizabeths they had married; forming altogether two handsome duodecimo pages, and concluding with the arms and motto:--'Principal seat, Kellynch Hall, in the county of Somerset,' and Sir Walter's handwriting again in this finale:--\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
    Routine trial
  LoopTerminator trials_1
  Routine instruct_red
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = textB.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u' --Three girls, the two eldest sixteen and fourteen, was an awful legacy for a mother to bequeath, an awful charge rather, to confide to the authority and guidance of a conceited, silly father. She had, however, one very intimate friend, a sensible, deserving woman, who had been brought, by strong attachment to herself, to settle close by her, in the village of Kellynch; and on her kindness and advice, Lady Elliot mainly relied for the best help and maintenance of the good principles and instruction which she had been anxiously giving her daughters.', 'itemColor': u'red'},
      {'text': u" This friend, and Sir Walter, did not marry, whatever might have been anticipated on that head by their acquaintance. Thirteen years had passed away since Lady Elliot's death, and they were still near neighbours and intimate friends, and one remained a widower, the other a widow. \n\nThat Lady Russell, of steady age and character, and extremely well provided for, should have no thought of a second marriage, needs no apology to the public, which is rather apt to be unreasonably discontented when a woman does marry again, than when she does not; but Sir Walter's continuing in singlene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,
      {'text': u"For one daughter, his eldest, he would really have given up any thing, which he had not been very much tempted to do. Elizabeth had succeeded, at sixteen, to all that was possible, of her mother's rights and consequence; and being very handsome, and very like himself, her influence had always been great, and they had gone on together most happily. His two other children were of very inferior value. Mary had acquired a little artificial importance, by becoming Mrs Charles Musgrove; but Anne, with an elegance of mind and sweetness of character, which must have placed her high with any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,
      {'text': u'To Lady Russell, indeed, she was a most dear and highly valued god-daughter, favourite, and friend. Lady Russell loved them all; but it was only in Anne that she could fancy the mother to revive again. \n\nA few years before, Anne Elliot had been a very pretty girl, but her bloom had vanished early; and as even in its height, her father had found little to admire in her, (so totally different were her delicate features and mild dark eyes from his own), there could be nothing in them, now that she was faded and thin, to excite his esteem. He had never indulged much hope, he had now n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
    Routine trial
  LoopTerminator trials_2
  Routine instruct_red
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = textC.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u'She had the remembrance of all this, she had the consciousness of being nine-and-twenty to give her some regrets and some apprehensions; she was fully satisfied of being still quite as handsome as ever, but she felt her approach to the years of danger, and would have rejoiced to be certain of being properly solicited by baronet-blood within the next twelvemonth or two. Then might she again take up the book of books with as much enjoyment as in her early youth, but now she liked it not. Always to be presented with the date of her own birth and see no marriage follow but that of a yo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,
      {'text': u"She had had a disappointment, moreover, which that book, and especially the history of her own family, must ever present the remembrance of. The heir presumptive, the very William Walter Elliot, Esq., whose rights had been so generously supported by her father, had disappointed her.\n\nShe had, while a very young girl, as soon as she had known him to be, in the event of her having no brother, the future baronet, meant to marry him, and her father had always meant that she should. He had not been known to them as a boy; but soon after Lady Elliot's death, Sir Walter had sought the ac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,
      {'text': u' He was at that time a very young man, just engaged in the study of the law; and Elizabeth found him extremely agreeable, and every plan in his favour was confirmed. He was invited to Kellynch Hall; he was talked of and expected all the rest of the year; but he never came. The following spring he was seen again in town, found equally agreeable, again encouraged, invited, and expected, and again he did not come; and the next tidings were that he was married. Instead of pushing his fortune in the line marked out for the heir of the house of Elliot, he had purchased independence by uni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,
      {'text': u'Sir Walter has resented it. As the head of the house, he felt that he ought to have been consulted, especially after taking the young man so publicly by the hand; For they must have been seen together he observed, once at Tattersall\'s and twice in the lobby of the House of Commons." His disapprobation was expressed but apparently very little regarded. Mr Elliot had attempted no apology and shewn himself as unsolicitous of being longer noticed by the family as Sir Walter considered him unworthy of it: all acquaintance between them had ceased."', 'itemColor': u'red'}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
    Routine trial
  LoopTerminator trials_3
  Routine instruct_green
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = textD.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u"Such were Elizabeth Elliot's sentiments and sensations; such the cares to alloy, the agitations to vary, the sameness and the elegance, the prosperity and the nothingness of her scene of life; such the feelings to give interest to a long, uneventful residence in one country circle, to fill the vacancies which there were no habits of utility abroad, no talents or accomplishments for home, to occupy.", 'itemColor': u'green'},
      {'text': u" But now, another occupation and solicitude of mind was beginning to be added to these. Her father was growing distressed for money. She knew, that when he now took up the Baronetage, it was to drive the heavy bills of his tradespeople, and the unwelcome hints of Mr Shepherd, his agent, from his thoughts. The Kellynch property was good, but not equal to Sir Walter's apprehension of the state required in its possessor. ", 'itemColor': u'green'},
      {'text': u'While Lady Elliot lived, there had been method, moderation, and economy, which had just kept him within his income; but with her had died all such right-mindedness, and from that period he had been constantly exceeding it. It had not been possible for him to spend less; he had done nothing but what Sir Walter Elliot was imperiously called on to do; but blameless as he was, he was not only growing dreadfully in debt, but was hearing of it so often, that it became vain to attempt concealing it longer, even partially, from his daughter.\n\n', 'itemColor': u'green'},
      {'text': u" He had given her some hints of it the last spring in town; he had gone so far even as to say, 'Can we retrench? Does it occur to you that there is any one article in which we can retrench?' and Elizabeth, to do her justice, had, in the first ardour of female alarm, set seriously to think what could be done, and had finally proposed these two branches of economy, to cut off some unnecessary charities, and to refrain from new furnishing the drawing-room; to which expedients she afterwards added the happy thought of their taking no present down to Anne, as had been the usual yearly cu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
    Routine trial
  LoopTerminator trials_4
  Routine thanks
